CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:spot_image
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:spot_image
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):25,35
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

OverlayObjects:[module_num:6|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
    Input:spot_image
    Name the output image:OverlayObjects
    Objects:IdentifyPrimaryObjects
    Opacity:0.3

OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:spot_image
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:IdentifyPrimaryObjects

ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output objects:ShrunkenNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:spot_image
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:ShrunkenNuclei
